######################
#### Detector Gas ####
######################

#import world
includeFile = ./DetectorExterior.txt

#material of the gas inside the detector
sv:Ma/ArgonGas/Components = 1 "Argon"
uv:Ma/ArgonGas/Fractions = 1 1
d:Ma/ArgonGas/Density = 1.66 mg/cm3


#geometry of the detector
s:Ge/GasCylinder/Parent = "DetectorExterior" #placing the gas inside the detector
s:Ge/GasCylinder/Type = "TsCylinder" #the detector is a cylinder, therefore the volume of the gas is also a cylinder
d:Ge/GasCylinder/RMin = 0.0 cm
d:Ge/GasCylinder/RMax = 1.3 cm
d:Ge/GasCylinder/SPhi = 0.0 deg
d:Ge/GasCylinder/DPhi = 360.0 deg
d:Ge/GasCylinder/HL = 7. cm
s:Ge/GasCylinder/Material = "ArgonGas"
d:Ge/GasCylinder/TransX = 0. cm
d:Ge/GasCylinder/TransY = 0. cm
d:Ge/GasCylinder/TransZ = 0. cm
d:Ge/GasCylinder/RotX = 0.0 deg
d:Ge/GasCylinder/RotY = 0.0 deg
d:Ge/GasCylinder/RotZ = 0.0 deg
s:Ge/GasCylinder/Color = "yellow"
s:Ge/GasCylinder/DrawingStyle = "Wireframe"


b:Ge/GasCylinder/PrintInformation = "True" #Print out specifications






